PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = source_monitoring
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      wrapWidth = 2
      text = get ready to say the word that appears on the screen...
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      End Routine:
        serv.start()
  Routine ok
    CodeComponent code
      Begin Routine:
        if(changeType == "pitch"):
            print 'this is a pitch trial'
            mic = Input(chnl=0)

            ## This uses harmonizer
            b = Harmonizer(mic, transpo=harmPitch)
            c = Gate(b, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
            d = Follower2(b)

            talkThresh = .08
            talkStarted = False
            stoppedTalking = False
            stopTime = 100
        else:
            print 'this is a speed trial'
            finished = 'not finished'
            playback_speed = speed
            dur = 2
            if playback_speed == 0:
                playback_speed = pow(10,-100)
            i = Input()

            def start():
                print "start!"
                rec.play()
                a.play().out()
                tf.stop()

            def stop():
                print "stop!"
                i.stop()
                global finished
                finished = 'finished'
                a.stop()
                a.reset()
                tf.play()

            tab = NewTable(dur, chnls=2)
            transpo_to_normal = math.log(1.0 / playback_speed, 2) * 12
            j = Harmonizer(i, transpo=transpo_to_normal).mix(2)
            k = Gate(j, thresh=-70, falltime=0.02, lookahead=20.0)
            rec = TableRec(k, tab)
            a = TableRead(table=tab, freq=playback_speed/dur).stop()
            env = Follower(i)
            th = Thresh(env, .2)
            tf = TrigFunc(th, start)
            tr = TrigFunc(rec['trig'], stop)
      End Routine:
        #serv.stop()
        print finished
      Each Frame:
        if(changeType == "pitch"):
            if d.get() > talkThresh:
                    talkStarted = True

            if talkStarted and not stoppedTalking:
                if d.get() < talkThresh:
                    stoppedTalking = True
                    stopTime = globalClock.getTime() + 1

            if stoppedTalking and globalClock.getTime() >= stopTime:
                mic.stop()
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
        else:
            if(finished == 'finished'):
                print 'it worked'
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                    continueRoutine = False
    TextComponent text_2
      text [set every repeat] = $word
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine initialize_code
    CodeComponent code_3
      Begin Experiment:
        from psychopy import gui
        from pyo import *
        import math, sys, csv, random
        serv = Server().boot()

        ## SETTINGS ##

        SPEED_SMALL_AMOUNT = 0.975
        SPEED_MEDIUM_AMOUNT = 0.95
        SPEED_LARGE_AMOUNT = 0.925
        PITCH_HIGHER_SMALL_AMOUNT = 0.5
        PITCH_HIGHER_LARGE_AMOUNT = 1.0
        PITCH_LOWER_SMALL_AMOUNT = -0.5
        PITCH_LOWER_LARGE_AMOUNT = -1.0

        ## END SETTINGS ##





        # initialize this variable - it keeps track of whether
        # the subject is finished speaking during a time stretch trial
        finished = True

        ##########################################################
        ### read in the original word list file and save word list file for this subject
        ##########################################################
        # container array for file contents
        orig_words = []
        # read csv file with the original word lists (in same directory as this experiment script)
        with open('orig_words.csv', 'rU') as csvfile:
            test = csv.reader(csvfile)
            for i in test:
                orig_words.append(i)

        # for now, assignment of list to trial type is random
        # need to write method for letting experimenter choose assignment at run time
        assignment_order = random.sample([0,1,2,3,4,5,6,7,8], 9)

        # initialize word containers for the trial types
        unmodified_words1 = []
        unmodified_words2 = []
        slowed_small_words = []
        slowed_medium_words = []
        slowed_large_words = []
        pitch_higher_small_words = []
        pitch_higher_large_words = []
        pitch_lower_small_words = []
        pitch_lower_large_words = []

        # assign words to those containers
        for row in orig_words:
            unmodified_words1.append(row[assignment_order[0]])
            unmodified_words2.append(row[assignment_order[1]])
            slowed_small_words.append(row[assignment_order[2]])
            slowed_medium_words.append(row[assignment_order[3]])
            slowed_large_words.append(row[assignment_order[4]])
            pitch_higher_small_words.append(row[assignment_order[5]])
            pitch_higher_large_words.append(row[assignment_order[6]])
            pitch_lower_small_words.append(row[assignment_order[7]])
            pitch_lower_large_words.append(row[assignment_order[8]])

        # this will be the name of the wordlist csv file for this subject
        wordlist_filename = filename+'_wordlist.csv'

        # build a big array with all the words and also attach trialtype and amount data,
        # like this: [word, trialtype, trialtype_extended, amount, list]
        master_list = []

        # add the words (CAREFUL! This assumes all of the categories are of equal length)
        for word_index in range(len(slowed_small_words)):
            if word_index == 0:
                continue
            master_list.append([unmodified_words1[word_index], 'unmodified', 'unmodified',            'unmodified',                                        unmodified_words1[0]])
            master_list.append([unmodified_words2[word_index], 'unmodified', 'unmodified',            'unmodified',                                        unmodified_words2[0]])
            master_list.append([slowed_small_words[word_index],         'speed', 'slow small',           SPEED_SMALL_AMOUNT,                slowed_small_words[0]])
            master_list.append([slowed_medium_words[word_index],     'speed', 'slow medium',       SPEED_MEDIUM_AMOUNT,             slowed_medium_words[0]])
            master_list.append([slowed_large_words[word_index],         'speed', 'slow large',             SPEED_LARGE_AMOUNT,               slowed_large_words[0]])
            master_list.append([pitch_higher_small_words[word_index], 'pitch',  'pitch higher small', PITCH_HIGHER_SMALL_AMOUNT,  pitch_higher_small_words[0]])
            master_list.append([pitch_higher_large_words[word_index], 'pitch',  'pitch higher large',  PITCH_HIGHER_LARGE_AMOUNT, pitch_higher_large_words[0]])
            master_list.append([pitch_lower_small_words[word_index],  'pitch',  'pitch lower small',   PITCH_LOWER_SMALL_AMOUNT,  pitch_lower_small_words[0]])
            master_list.append([pitch_lower_large_words[word_index],  'pitch',  'pitch lower large',    PITCH_LOWER_SMALL_AMOUNT,  pitch_lower_large_words[0]])

        # now randomize the list
        random.shuffle(master_list)

        # save csv file to disk
        with open(wordlist_filename,'wb') as w:
            writer=csv.writer(w)
            writer.writerow(['word','trialtype', 'trialtype_extended', 'amount', 'list'])
            for row in master_list:
                writer.writerow(row)
Flow
  Routine initialize_code
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = wordlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'word': u'cat', 'pitch': 0.85},
      {'word': u'dog', 'pitch': 0.9},
      {'word': u'truck', 'pitch': 1.1},
      {'word': u'car', 'pitch': 1.15},
      {'word': u'elephant', 'pitch': 1.2}]
    Routine trial
    Routine ok
  LoopTerminator trials
